PsychoPy2experiment version="2023.2.2"
Settings
  Audio lib = ptb
  Experiment info = {'participant': 'f"{randint(0, 999999):06.0f}"', 'session': '001'}
  Full-screen window = False
  Monitor = testMonitor
  Screen = 1
  Units = height
  Window size (pixels) = [800,800]
  expName = sancho-test-minimal
  keyboardBackend = ioHub
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Routines
  Routine show
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    TextComponent mylabel1
      letterHeight = 0.05
      pos = (0.3, 0)
      startVal [time (s)] = 0.0
      text [set every repeat] = $Label1_type
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    TextComponent myshape1
      letterHeight = 0.05
      pos = (-.3, 0)
      startVal [time (s)] = 0.0
      text [set every repeat] = $Shape1_shape_name
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    TextComponent which_participant
      letterHeight = 0.05
      startVal [time (s)] = 0.0
      text [set every repeat] = $msg
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    KeyboardComponent key_resp
      allowedKeys = 'y','n','left','right','space','enter'
      forceEndRoutine = True
      startVal [time (s)] = 0.0
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  Routine docount
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    CodeComponent code
      Code Type = Py
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      Begin Experiment:
        p=0
      Begin Routine:
        p=p+1
        msg="This is N = "+str(p)
  Routine setmap
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    CodeComponent set_mapping
      Code Type = Py
      Begin Routine:
        import random
        mytasks = ["control", "reward", "valence"]
        random.shuffle(mytasks)

        if mytasks[0] == "control":

            possible_labels=['air', 'earth', 'sky']
            random.shuffle(possible_labels)
            Label1_type = possible_labels[0]
            Label2_type = possible_labels[1]
            Label3_type = possible_labels[2]

            indices=[0,1,2]
            random.shuffle(indices)
            #[1,0,2]
            possible_file_names =  ['Triangle.bmp', 'Square.bmp', 'Circle.bmp']
            possible_shape_names = ['Triangle',     'Square',     'Circle']

            Shape1_shape_name = possible_shape_names[indices[0]] # possible_shape_names[1]  label='Square'
            Shape1_file_name = possible_file_names[indices[0]] # possible_file_names[1] filename is 'Square.bmp'

            Shape2_shape_name = possible_shape_names[indices[1]]
            Shape2_file_name = possible_file_names[indices[1]]

            Shape1_shape_name = possible_shape_names[indices[2]]
            Shape1_file_name = possible_file_names[indices[2]]

        elif mytasks[0] == "reward":
            # then
             possible_labels=['high', 'medium', 'none']
             random.shuffle(possible_labels)
             Label1_type = possible_labels[0]
             Label2_type = possible_labels[1]
             Label3_type = possible_labels[2]

             indices=[0,1,2]
             random.shuffle(indices)
             # [2,0,1]
             possible_file_names =  ['Pentagon.bmp', 'Diamond.bmp', 'Oval.bmp']
             possible_shape_names = ['Pentagon',     'Diamond',     'Oval']

             Shape1_shape_name = possible_shape_names[indices[0]] # possible_shape_names[1]  label='Oval'
             Shape1_file_name = possible_file_names[indices[0]] # possible_file_names[1] filename is 'Oval.bmp'

             Shape2_shape_name = possible_shape_names[indices[1]]
             Shape2_file_name = possible_file_names[indices[1]]

             Shape1_shape_name = possible_shape_names[indices[2]]
             Shape1_file_name = possible_file_names[indices[2]]

        elif mytasks[0] == "valence":
            # then
             possible_labels=['happy', 'neutral', 'sad']
             random.shuffle(possible_labels)
             Label1_type = possible_labels[0]
             Label2_type = possible_labels[1]
             Label3_type = possible_labels[2]

             indices=[0,1,2]
             random.shuffle(indices)
             # [0,2,1]
             possible_file_names =  ['Hexagon.bmp', 'Rectangle.bmp', 'Star.bmp']
             possible_shape_names = ['Hexagon',     'Rectangle',     'Star']

             Shape1_shape_name = possible_shape_names[indices[0]] # possible_shape_names[1]  label='Hexagon'
             Shape1_file_name = possible_file_names[indices[0]] # possible_file_names[1] filename is 'Hexagon.bmp'

             Shape2_shape_name = possible_shape_names[indices[1]]
             Shape2_file_name = possible_file_names[indices[1]]

             Shape1_shape_name = possible_shape_names[indices[2]]
             Shape1_file_name = possible_file_names[indices[2]]
Flow
  LoopInitiator trials loopType="TrialHandler"
    loopType = random
    nReps = 5
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    Routine docount
    Routine setmap
    Routine show
  LoopTerminator trials
